PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = learning
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome to the Guessing Game Experiment!
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    CodeComponent randomize_guesses
      Code Type = Auto->JS
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      Begin Experiment:
        import random as rnd

        practice_list = 2 * ["Guess", "Read"]
        rnd.shuffle(practice_list)
        guess_list = 39 * ["Guess", "Read"]
        print(guess_list)
        rnd.shuffle(guess_list)
        print(guess_list)
  Routine instruct
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    TextComponent guess_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $is_guess
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  Routine encode
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    TextComponent dash_stim_learning
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = -
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    TextComponent cue_stim_learning
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $cue
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    TextComponent target_stim
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $target
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    KeyboardComponent end_encoding
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.00
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  Routine instructions1
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    TextComponent instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1

        In the first part of the experiment, you will read word pairs on the screen.

        For example:

        Computer - Keyboard

        Your task is to try to memorize as many of the word pairs as possible.

        Press SPACE to continue.
    KeyboardComponent instruction1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sometimes, before you read the full word pair, you will see a single word on the screen and you will have to guess what the other word is.

        For example:

        Computer - ?

        Press SPACE to continue.
    KeyboardComponent instruction2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_guess
    RoutineSettingsComponent feedback_guess
      skipIf = $is_guess != "Guess" or guess_reached.keys in ['f','g','h']
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    TextComponent no_response_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You did not press F or J.

        Remember to press key J to indicate that you came up with a guess.
        Press the F key if you could not come up with a guess.
  Routine feedback_rate
    RoutineSettingsComponent feedback_rate
      skipIf = $rate_relatedness.keys == None
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    TextComponent rating_feedback
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Your rating:
    TextComponent rating_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $rate_relatedness.keys
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  Routine feedback_no_rating
    RoutineSettingsComponent feedback_no_rating
      skipIf = $rate_relatedness.keys != None
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    TextComponent no_rating_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You did not rate the relatedness.

        You need to rate how related you think the words are.
  Routine guess
    RoutineSettingsComponent guess
      skipIf = $is_guess != "Guess"
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    TextComponent dash_stim_guessing
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = -
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    TextComponent cue_stim_guessing
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $cue
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    TextComponent guess_stim
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = ?
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    KeyboardComponent end_guess
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.00
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  Routine end_part1
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    KeyboardComponent end_part1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_part1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You just finished Part 1 of the experiment!

        Take a 5 minute break before continuing.

        Press SPACE to continue
  Routine guess_response
    RoutineSettingsComponent guess_response
      skipIf = $is_guess != "Guess"
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    TextComponent dash_stim_guessing_resp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = -
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    TextComponent cue_stim_guessing_resp
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $cue
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    TextComponent guess_stim_resp
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ?
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    TextComponent guess_question
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        How many guesses did you make?

        F) 0        G) 1        H) More
    KeyboardComponent guess_reached
      allowedKeys = 'f', 'g', 'h'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine instructions4
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    TextComponent instructions4_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Summary:
        Your task is to learn as many of the word pairs presented on the screen as possible.

        Sometimes, before you see the word pair, you will see one word and you will have to guess what the pair of the word is. Press F, G,H to indicate whether you came up with a guess.

        Before the experiment, you will practice the task.

        Press SPACE to start the practice.
    KeyboardComponent instruction4_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions3
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    TextComponent instructions3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Do not say the guess out loud but try to generate as many guesses silently as possible. You will have 5 seconds to make a guess, then you will have to indicate whether you could generate one or more guesses with the keys F,G,H.

        F) Made no guess        G) Made 1 guess        H) Made more than 1 guess

        Press SPACE to continue.
    KeyboardComponent instruction3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cued_recall
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    TextComponent cue_stim_recall
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $cue
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    TextComponent dash_stim_recall
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = -
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    TextComponent qmark_target
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = ?
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    KeyboardComponent end_cued_recall
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine recall_response
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    TextComponent dash_stim_recall_resp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = -
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    TextComponent cue_stim_recall_resp
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $cue
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    TextComponent recall_stim_resp
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ?
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    TextComponent recall_question
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Could you recall the word pair?

        F) No        G) Yes
    KeyboardComponent recall_reached
      allowedKeys = 'f', 'g'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine recall_select
    RoutineSettingsComponent recall_select
      skipIf = recall_reached.keys != 'g'
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    CodeComponent letter_choice
      Code Type = Auto->JS
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      Begin Routine:
        recall_select_text = "Select the last letter of the word with a numeric key.\n"

        random_letters = rnd.choices("abcdefghijklmnoprstuvz", k=3)
        target_letter = target[-1]
        while target_letter in random_letters:
            random_letters = rnd.choices("abcdefghijklmnoprstuvz", k=3)


        random_letters.append(target_letter)
        print(random_letters)
        letters = rnd.sample(random_letters, len(random_letters))
        print(letters)
        recall_select_text += "1) " + letters[0] + "        "
        recall_select_text += "2) " + letters[1] + "        "
        recall_select_text += "3) " + letters[2] + "        "
        recall_select_text += "4) " + letters[3]
    TextComponent dash_stim_recall_select
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = -
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    TextComponent cue_stim_recall_select
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $cue
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    TextComponent recall_stim_select
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = ?
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    TextComponent recall_question_select
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $recall_select_text
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    KeyboardComponent recall_selection
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine iti_learning
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent set_guess_stim
      Code Type = Auto->JS
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      Begin Routine:
        is_guess = guess_list.pop()
  Routine iti_recall
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    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine end_part2
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    KeyboardComponent end_part2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent end_part2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You just finished Part 2 of the experiment!

        Take a 5 minute break before continuing.

        Press SPACE to continue
  Routine item
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    TextComponent semantic_map_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $list_item
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    KeyboardComponent living_nonliving
      allowedKeys = 'f','g'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent end_mapping
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent licing_nonliving_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = F) Living        G) Non-living
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  Routine iti_mapping
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    StaticComponent ISI_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent mapping_trial_counter
      Code Type = Auto->JS
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      Begin Experiment:
        mapping_trial = 0
      Begin Routine:
        mapping_trial = mapping_trial + 1
  Routine iti_learning_practice
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    StaticComponent ISI_4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent set_practice_guess_stim
      Code Type = Auto->JS
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      Begin Routine:
        is_guess = practice_list.pop()
  Routine start_task
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    TextComponent start_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now comes the task.

        Press SPACE when you are ready to start.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_recall
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    TextComponent recall_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next part of the experiment, you will have to recall the pair of each word you see on the screen.

        Try to recall the word (5s) and then indicate whether you remember the word with the keys F (Can't recall) and G (Can recall).

        If you could recall the word, we will ask you what the last letter of the word is. You can choose from 4 options (Keys 1-4).

        Before the starting, you will practice the task.

        Press SPACE to start the practice.
    KeyboardComponent recall_instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_semantic_mapping
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    TextComponent sm_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the last part of the experiment, you will see a list of words, presented one by one on the screen. You will have to decide whether the meaning of the word refers to something living or non-living.

        Indicate your response with the F / G keys.

        Press SPACE to start the task.
    KeyboardComponent sm_instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mapping_break
    RoutineSettingsComponent mapping_break
      skipIf = mapping_trial < 50
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Break. Press Space to continue.
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    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_counter
      Code Type = Auto->JS
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      Begin Routine:
        mapping_trial = 0
  Routine thanks
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    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        This is the end of the experiment.

        Thank you!
Flow
  Routine welcome
  Routine instructions1
  Routine instructions2
  Routine instructions3
  Routine instructions4
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Haus', 'target': 'Fenster'},
      {'cue': 'Frühstück', 'target': 'Brot'},
      {'cue': 'Hund', 'target': 'Ball'},
      {'cue': 'Park', 'target': 'Baum'}]
    Routine iti_learning_practice
    Routine guess
    Routine guess_response
    Routine feedback_guess
    Routine encode
  LoopTerminator practice_trials
  Routine start_task
  LoopInitiator learning_trials loopType="TrialHandler"
    conditionsFile = cue_target_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Akrobatin', 'target': 'Seil'},
      {'cue': 'Chips', 'target': 'Salz'},
      {'cue': 'Definition', 'target': 'Begriff'},
      {'cue': 'Experiment', 'target': 'Versuch'},
      {'cue': 'Fakt', 'target': 'Wissen'},
      {'cue': 'Leistung', 'target': 'Ehre'},
      {'cue': 'Rauch', 'target': 'Nebel'},
      {'cue': 'Scheidung', 'target': 'Anwalt'},
      {'cue': 'Service', 'target': 'Kunde'},
      {'cue': 'Shampoo', 'target': 'Seife'},
      {'cue': 'Soldat', 'target': 'Kämpfer'},
      {'cue': 'Zeichnung', 'target': 'Bleistift'},
      {'cue': 'Anführer', 'target': 'Boss'},
      {'cue': 'Beutel', 'target': 'Sack'},
      {'cue': 'Gast', 'target': 'Zimmer'},
      {'cue': 'Geburtstag', 'target': 'Kerze'},
      {'cue': 'Geschwister', 'target': 'Eltern'},
      {'cue': 'Golf', 'target': 'Loch'},
      {'cue': 'Küche', 'target': 'Tisch'},
      {'cue': 'Rasen', 'target': 'Pflege'},
      {'cue': 'Safari', 'target': 'Ausflug'},
      {'cue': 'Sitzgurt', 'target': 'Gesetz'},
      {'cue': 'Vampir', 'target': 'Geist'},
      {'cue': 'Vergangenheit', 'target': 'Erinnerungen'},
      {'cue': 'Agent', 'target': 'Reise'},
      {'cue': 'Brise', 'target': 'Luft'},
      {'cue': 'Decke', 'target': 'Kissen'},
      {'cue': 'Diskussion', 'target': 'Vorlesung'},
      {'cue': 'Eingeweide', 'target': 'Organ'},
      {'cue': 'Floh', 'target': 'Käfer'},
      {'cue': 'Frieden', 'target': 'Harmonie'},
      {'cue': 'Garage', 'target': 'Haus'},
      {'cue': 'Gegenstand', 'target': 'Artikel'},
      {'cue': 'Humor', 'target': 'Komödie'},
      {'cue': 'Insel', 'target': 'Meer'},
      {'cue': 'Karneval', 'target': 'Festival'},
      {'cue': 'Mappe', 'target': 'Buch'},
      {'cue': 'Publikum', 'target': 'Applaus'},
      {'cue': 'Pumpe', 'target': 'Reifen'}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
    Routine iti_learning
    Routine guess
    Routine guess_response
    Routine encode
  LoopTerminator learning_trials
  Routine end_part1
  Routine instructions_recall
  LoopInitiator test_practice_trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Haus', 'target': 'Fenster'},
      {'cue': 'Frühstück', 'target': 'Brot'},
      {'cue': 'Hund', 'target': 'Ball'},
      {'cue': 'Park', 'target': 'Baum'}]
    Routine iti_recall
    Routine cued_recall
    Routine recall_response
    Routine recall_select
  LoopTerminator test_practice_trials
  Routine start_task
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = cue_target_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine iti_recall
    Routine cued_recall
    Routine recall_response
    Routine recall_select
  LoopTerminator test_trials
  Routine end_part2
  Routine instructions_semantic_mapping
  LoopInitiator semantic_mapping loopType="TrialHandler"
    conditionsFile = targets_mediators.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Akrobatin', 'list_item': 'Seil', 'kind': 'target'},
      {'cue': 'Chips', 'list_item': 'Salz', 'kind': 'target'},
      {'cue': 'Definition', 'list_item': 'Begriff', 'kind': 'target'},
      {'cue': 'Experiment', 'list_item': 'Versuch', 'kind': 'target'},
      {'cue': 'Fakt', 'list_item': 'Wissen', 'kind': 'target'},
      {'cue': 'Leistung', 'list_item': 'Ehre', 'kind': 'target'},
      {'cue': 'Rauch', 'list_item': 'Nebel', 'kind': 'target'},
      {'cue': 'Scheidung', 'list_item': 'Anwalt', 'kind': 'target'},
      {'cue': 'Service', 'list_item': 'Kunde', 'kind': 'target'},
      {'cue': 'Shampoo', 'list_item': 'Seife', 'kind': 'target'},
      {'cue': 'Soldat', 'list_item': 'Kämpfer', 'kind': 'target'},
      {'cue': 'Zeichnung', 'list_item': 'Bleistift', 'kind': 'target'},
      {'cue': 'Anführer', 'list_item': 'Boss', 'kind': 'target'},
      {'cue': 'Beutel', 'list_item': 'Sack', 'kind': 'target'},
      {'cue': 'Gast', 'list_item': 'Zimmer', 'kind': 'target'},
      {'cue': 'Geburtstag', 'list_item': 'Kerze', 'kind': 'target'},
      {'cue': 'Geschwister', 'list_item': 'Eltern', 'kind': 'target'},
      {'cue': 'Golf', 'list_item': 'Loch', 'kind': 'target'},
      {'cue': 'Küche', 'list_item': 'Tisch', 'kind': 'target'},
      {'cue': 'Rasen', 'list_item': 'Pflege', 'kind': 'target'},
      {'cue': 'Safari', 'list_item': 'Ausflug', 'kind': 'target'},
      {'cue': 'Sitzgurt', 'list_item': 'Gesetz', 'kind': 'target'},
      {'cue': 'Vampir', 'list_item': 'Geist', 'kind': 'target'},
      {'cue': 'Vergangenheit', 'list_item': 'Erinnerungen', 'kind': 'target'},
      {'cue': 'Agent', 'list_item': 'Reise', 'kind': 'target'}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
    Routine iti_mapping
    Routine item
    Routine mapping_break
  LoopTerminator semantic_mapping
  Routine thanks
